PsychoPy2experiment version="2024.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Cued GoNogo Task
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine TaskIntro
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    TextComponent fixation
      color = black
      font = NanumSquare
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Final Experiment!

        Thank you for participating in the scan.

        Pressing the SPACEBAR will sart the scan.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent LSL_Setup
      Code Type = Auto->JS
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      Begin Experiment:
        try:
            from pylsl import StreamInfo, StreamOutlet
            info = StreamInfo('Markers', 'Markers', 1, 0, 'string', 'psychopygonogo123')
            outlet = StreamOutlet(info)
            outlet.push_sample(['ExperimentStart'])
            using_lsl = True
            print("LSL marker stream created successfully")
        except Exception as e:
            using_lsl = False
            print(f"LSL not available: {e}")

        def send_marker(marker_value):
            if using_lsl:
                outlet.push_sample([marker_value])
                print(f"Marker sent: {marker_value}")
  Routine BlockStart
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    TextComponent BlockStart_Msg
      color = black
      font = NanumSquare
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockMsg
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent BreakStart_1_Marker
      Code Type = Auto->JS
      Begin Routine:
        send_marker("BlockStart_1")
  Routine Fixation
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    TextComponent FixationPhase
      color = black
      font = NanumSquare
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.7
      text = +
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    TextComponent Blank
      letterHeight = 0.1
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 0.5
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    CodeComponent FixationMarker
      Code Type = Auto->JS
      Begin Routine:
        send_marker('Fixation')
  Routine Trial
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    PolygonComponent Cue
      fillColor = white
      lineColor = black
      lineWidth = 1.5
      shape = rectangle
      size [set every repeat] = $[Stim_Width, Stim_Height]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = CueTime
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    CodeComponent ColorSelection
      Code Type = Auto->JS
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      Begin Routine:
        if StimType == 'Go':
            StimColor = 'green'
        elif StimType == 'NoGo':
            StimColor = 'blue'
    PolygonComponent GoNogo_Stim
      fillColor [set every repeat] = $StimColor
      lineColor = black
      lineWidth = 1.5
      shape = rectangle
      size [set every repeat] = $[Stim_Width, Stim_Height]
      startVal [time (s)] = CueTime+0.2
      stopVal [duration (s)] = 0.5
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    KeyboardComponent Key_Resp
      allowedKeys = 'space'
      correctAns = $CRESP
      forceEndRoutine = True
      startVal [time (s)] = CueTime+0.2
      stopVal [duration (s)] = 0.5
      storeCorrect = True
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    CodeComponent TrialMarkers
      Code Type = Auto->JS
      Begin Routine:
        cue_marker = f'Cue_{StimType}'
        send_marker(cue_marker)
      Each Frame:
        if GoNogo_Stim.status == STARTED and GoNogo_Stim.status != FINISHED:
            if not hasattr(thisExp, 'stim_marker_sent'):
                thisExp.stim_marker_sent = True
                stim_marker = f'Stimulus_{StimType}'
                send_marker(stim_marker)

        if Key_Resp.status == STARTED and len(Key_Resp.keys) > 0:
            if not hasattr(thisExp, 'resp_marker_sent'):
                thisExp.resp_marker_sent = True
                send_marker('Response')
      End Routine:
        if hasattr(thisExp, 'stim_marker_sent'):
            del thisExp.stim_marker_sent
        if hasattr(thisExp, 'resp_marker_sent'):
            del thisExp.resp_marker_sent
  Routine Feedback
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    CodeComponent feedback_sentence
      Code Type = Auto->JS
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      Begin Routine:
        if StimType == 'Go': # go cue on the condition of presenting the go cue
            if Key_Resp.corr == 1: # if the answer is correct,
                fb_color = 'Maroon'
                if Key_Resp.rt is not None:
                    fb_msg = "Correct" + "\n" + "Reaction time: " + str(int(Key_Resp.rt * 1000)) + "ms"
                else:
                    fb_msg = "Correct" + "\n" + "Reaction time: not recorded"
            else: # if correct
                fb_color = 'MediumBlue'
                fb_msg = "Wrong"
        elif StimType == 'NoGo': # Nogo cue on Nogo cue presentation condition
            if Key_Resp.corr == 1: # if the answer is correct,
                fb_color = 'Maroon'
                fb_msg = "Correct"
            else: # if incorrect
                fb_color = 'MediumBlue'
                fb_msg = "Incorrect. You should not press the button."
    TextComponent Feedback_Present
      color [set every repeat] = $fb_color
      font = NanumSquare
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      text [set every repeat] = $fb_msg
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    CodeComponent FeedbackMarker
      Code Type = Auto->JS
      Begin Routine:
        if hasattr(Key_Resp, 'corr'):
            if Key_Resp.corr == 1:
                send_marker(f'Feedback_Correct_{StimType}')
            else:
                send_marker(f'Feedback_Incorrect_{StimType}')
  Routine BlockEnd
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    TextComponent BlockEnd_Msg
      color = black
      font = NanumSquare
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        End of Block.

        Take a 4 minute break.

        Please press SPACE when ready.
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent BreakEnd_1_Marker
      Code Type = Auto->JS
      Begin Routine:
        send_marker("BlockEnd_1")
  Routine TaskEnd
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    TextComponent ThankYou
      color = black
      font = NanumSquare
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank You for Participating!

        The experiment is now complete.

        Please inform the experimenter that you have finished.
    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent EndMarker
      Code Type = Auto->JS
      Begin Routine:
        send_marker('ExperimentEnd')
Flow
  Routine TaskIntro
  LoopInitiator Blocks loopType="TrialHandler"
    conditionsFile = block/BlockList.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Block': 'block/CondBlock1.xlsx', 'blockMsg': 'You are about to start a block of type 1 trials.'},
      {'Block': 'block/CondBlock2.xlsx', 'blockMsg': 'You are about to start a block of type 2 trials.'},
      {'Block': 'block/CondBlock3.xlsx', 'blockMsg': 'You are about to start a block of type 3 trials.'},
      {'Block': 'block/CondBlock4.xlsx', 'blockMsg': 'You are about to start a block of type 4 trials.'},
      {'Block': 'block/CondBlock5.xlsx', 'blockMsg': 'You are about to start a block of type 5 trials.'},
      {'Block': 'block/CondBlock6.xlsx', 'blockMsg': 'You are about to start a block of type 6 trials. '}]
    Routine BlockStart
    LoopInitiator Trials loopType="TrialHandler"
      conditionsFile = $Block
      loopType = sequential
      nReps = 1
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      Routine Fixation
      Routine Trial
      Routine Feedback
    LoopTerminator Trials
    Routine BlockEnd
  LoopTerminator Blocks
  Routine TaskEnd
