PsychoPy2experiment version="2024.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Cued GoNogo Task
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine TaskIntro
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    TextComponent fixation
      color = black
      font = NanumSquare
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Practice Experiment!

        Pressing the SPACEBAR will start the scan.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent LSL_Setup
      Code Type = Auto->JS
      Begin Experiment:
        try:
            from pylsl import StreamInfo, StreamOutlet
            info = StreamInfo('PsychoPy', 'Markers', 1, 0, 'string', 'psychopygonogo123')
            outlet = StreamOutlet(info)
            outlet.push_sample(['ExperimentStart'])
            using_lsl = True
            print("LSL marker stream created successfully")
        except Exception as e:
            using_lsl = False
            print(f"LSL not available: {e}")

        def send_marker(marker_value):
            if using_lsl:
                outlet.push_sample([marker_value])
                print(f"Marker sent: {marker_value}")
  Routine Trial
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    PolygonComponent Cue
      fillColor = white
      lineColor = black
      lineWidth = 1.5
      shape = rectangle
      size [set every repeat] = $[Stim_Width, Stim_Height]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = CueTime
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    CodeComponent ColorSelection
      Code Type = Auto->JS
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      Begin Routine:
        if StimType == 'Go':
            StimColor = 'green'
        elif StimType == 'NoGo':
            StimColor = 'blue'
    PolygonComponent GoNogo_Stim
      fillColor [set every repeat] = $StimColor
      lineColor = black
      lineWidth = 1.5
      shape = rectangle
      size [set every repeat] = $[Stim_Width, Stim_Height]
      startVal [time (s)] = CueTime+0.2
      stopVal [duration (s)] = 0.5
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    KeyboardComponent Key_Resp
      allowedKeys = 'space'
      correctAns = $CRESP
      forceEndRoutine = True
      startVal [time (s)] = CueTime+0.2
      stopVal [duration (s)] = 0.5
      storeCorrect = True
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    CodeComponent TrialMarkers
      Code Type = Auto->JS
      Begin Routine:
        cue_marker = f'Cue_{StimType}'
        send_marker(cue_marker)
      Each Frame:
        if GoNogo_Stim.status == STARTED and GoNogo_Stim.status != FINISHED:
            if not hasattr(thisExp, 'stim_marker_sent'):
                thisExp.stim_marker_sent = True
                stim_marker = f'Stimulus_{StimType}'
                send_marker(stim_marker)

        if Key_Resp.status == STARTED and len(Key_Resp.keys) > 0:
            if not hasattr(thisExp, 'resp_marker_sent'):
                thisExp.resp_marker_sent = True
                send_marker('Response')
      End Routine:
        if hasattr(thisExp, 'stim_marker_sent'):
            del thisExp.stim_marker_sent
        if hasattr(thisExp, 'resp_marker_sent'):
            del thisExp.resp_marker_sent
  Routine TaskEnd
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    TextComponent Thankyou
      color = black
      font = NanumSquare
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        “Your contribution to this research is greatly appreciated!”

        The experiment is now complete.

        Please inform the experimenter that you have finished.
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent EndMarker
      Code Type = Auto->JS
      Begin Routine:
        send_marker('ExperimentEnd')
  Routine Fixation
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    TextComponent FixationPhase
      color = black
      font = NanumSquare
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.7
      text = +
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    TextComponent Blank
      letterHeight = 0.1
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 0.5
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    CodeComponent FixationMarker
      Code Type = Auto->JS
      Begin Routine:
        send_marker('Fixation')
  Routine Feedback
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    CodeComponent feedback_sentence
      Code Type = Auto->JS
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      Begin Routine:
        if StimType == 'Go': # go cue on the condition of presenting the go cue
            if Key_Resp.corr == 1: # if the answer is correct,
                fb_color = 'Maroon'
                fb_msg = "Correct"+"\n"+"Reaction Rate: "+str(int(Key_Resp.rt*1000))+"ms"
            else: # if correct
                fb_color = 'MediumBlue'
                fb_msg = "Wrong"
        elif StimType == 'NoGo': # Nogo cue on Nogo cure presentation condition
            if Key_Resp.corr == 1: # if the answer is correct,
                fb_color = 'Maroon'
                fb_msg = "Correct"
            else: # if incorrect
                fb_color = 'MediumBlue'
                fb_msg = "Incorrect. You should not press the button."
    TextComponent Feedback_Present
      color [set every repeat] = $fb_color
      font = NanumSquare
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      text [set every repeat] = $fb_msg
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    CodeComponent FeedbackMarker
      Code Type = Auto->JS
      Begin Routine:
        if hasattr(Key_Resp, 'corr'):
            if Key_Resp.corr == 1:
                send_marker(f'Feedback_Correct_{StimType}')
            else:
                send_marker(f'Feedback_Incorrect_{StimType}')
  Routine instructions
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    ImageComponent imageInstruct
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $instruct_slide
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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    ButtonComponent buttonNext
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.0000, 0.0000, 0.0000
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.7, -.4)
      size = (.2, .08)
      startVal [time (s)] = 0
      text = Next>
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Flow
  LoopInitiator instruction_slide_loop loopType="TrialHandler"
    conditionsFile = instructions/instruction_slides.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'instruct_slide': 'instructions/Slide1.PNG'},
      {'instruct_slide': 'instructions/Slide2.PNG'},
      {'instruct_slide': 'instructions/Slide3.PNG'}]
    Routine instructions
  LoopTerminator instruction_slide_loop
  Routine TaskIntro
  LoopInitiator Blocks loopType="TrialHandler"
    conditionsFile = blocks/BlockList.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Block': 'blocks/CondGo.xlsx'},
      {'Block': 'blocks/CondNoGo.xlsx'}]
    LoopInitiator Trials loopType="TrialHandler"
      conditionsFile = $Block
      loopType = random
      nReps = 1
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      Routine Fixation
      Routine Trial
      Routine Feedback
    LoopTerminator Trials
  LoopTerminator Blocks
  Routine TaskEnd
